PsychoPy2experiment version="2026.1.0"
Settings
  runMode = 1
  Experiment info = {"participant":"f\"{randint(0, 999999):06.0f}\"","session":"001"}
  Monitor = testMonitor
  Screen = 1
  Full-screen window = True
  Window size (pixels) = [1024,768]
  Show mouse = True
  Units = height
  Data filename = 'data/' + expInfo['participant'] + '_' + expName + '_' + expInfo['date']
  colPriority = {"thisRow.t":"priority.CRITICAL","expName":"priority.LOW"}
  keyboardBackend = PsychToolbox
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Routines
  Routine trial
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    TextComponent text
      startVal [time (s)] = 0
      stopVal [duration (s)] = 8
      text [set every repeat] = $study_words
      letterHeight = 0.05
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    SliderComponent slider
      startVal [time (s)] = 0.0
      size = (1.0, 0.1)
      pos = (0, -0.3)
      forceEndRoutine = True
      styles = rating
      font = Noto Sans
      ticks = (1, 2, 3, 4, 5)
      labels = "Familiar", "Unfamiliar"
      granularity = 0
      letterHeight = 0.05
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  Routine test
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    TextComponent text2
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      pos = 0,0.3
      text [set every repeat] = $test_words
      letterHeight = 0.05
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    TextboxComponent textbox
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      size = [0.5,0.5]
      editable = True
      letterHeight = 0.05
      lineSpacing = 1
      bold = False
      formattingSyntax = md
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    TextComponent text3
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      pos = 0,-0.3
      text [set every repeat] = Click to submit
      letterHeight = 0.05
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    MouseComponent mouse
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      clickable = text3
      saveParamsClickable [set every repeat] = name,
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    conditionsFile = study_words.csv
    nReps = 5
    conditions = []
    endPoints = [0,1]
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    Routine trial
  LoopTerminator trials
  LoopInitiator trials2 loopType="TrialHandler"
    loopType = random
    conditionsFile = test_words.csv
    nReps = 10
    conditions = []
    endPoints = [0,1]
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    Routine test
  LoopTerminator trials2
